synapse stdp:
    state:
        w real = 1.    @nest::weight   # Synaptic weight
        pre_trace real = 0.
        post_trace real = 0.

    parameters:
        d ms = 1 ms  @nest::delay   # Synaptic transmission delay
        lambda real = .01
        tau_tr_pre ms = 20 ms
        tau_tr_post ms = 20 ms
        alpha real = 1
        mu_plus real = 1
        mu_minus real = 1
        Wmax real = 100.
        Wmin real = 0.

    equations:
        pre_trace' = -pre_trace / tau_tr_pre
        post_trace' = -post_trace / tau_tr_post

    input:
        pre_spikes <- spike
        post_spikes <- spike
        post_rho real <- continuous  # Rho provided as continuous input

    output:
        spike

    onReceive(post_spikes):
        print("Info: processing a postsynaptic spike at time t = {t}")
        post_trace += 1

        # potentiate synapse with rho modulation
        w_ real = Wmax * ( w / Wmax  + post_rho * (lambda * ( 1. - ( w / Wmax ) )**mu_plus * pre_trace ))
        w = min(Wmax, w_)

    onReceive(pre_spikes):
        print("Info: processing a presynaptic spike at time t = {t}")
        pre_trace += 1

        # depress synapse with rho modulation
        # post_rho * 
        w_ real = Wmax * ( w / Wmax  - ( alpha * lambda * ( w / Wmax )**mu_minus * post_trace ))
        w = max(Wmin, w_)

        # deliver spike to postsynaptic partner
        deliver_spike(w, d)










































